PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  backgroundFit = fill
  backgroundImg = bg.png
  color = 0.0000, 0.0000, 0.0000
  expName = Noel_SocCuriosity
  frameRate = 60
  frameRateMsg = Loading, please wait...
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine EXP_IMAGE
    RoutineSettingsComponent EXP_IMAGE
      saveStartStop = False
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    CodeComponent code_exp_2
      Code Type = Auto->JS
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      Begin Experiment:
        expImageClock = core.Clock()
      Begin Routine:
        expImageClock.reset()

        startRoutine = timer.getTime()
        Joystick_Flag = False



        slider_satisfaction_Flag = True
        slider_aux_Flag = False


        slider_satisfaction.markerPos = 2.5
      Each Frame:
        currentAxisVal = joy.getAxis(0)


        if Joystick_Return_Flag:
            if currentAxisVal >  0.1 or currentAxisVal < -0.1:
                Joystick_Flag = True
        else:
            if currentAxisVal <  0.1 and currentAxisVal > -0.1:
                Joystick_Return_Flag = True

        if currentAxisVal > 0.7:
            continueRoutine = False


        #if Joystick_Flag and joy.getButton(0) == True:
        #    if slider_satisfaction_Flag:
        #        slider_satisfaction_RT = timer.getTime() - startRoutine
        #        satisfaction_time = timer.getTime()
        #        slider_satisfaction.markerPos = currentAxisVal * 40
        #        slider_satisfaction_Flag = False
        #        slider_aux_Flag = True
        #        slider_aux.markerPos = 3
        #        Joystick_Flag = False
        #        Joystick_Return_Flag = False
        #    elif slider_aux_Flag:
        #        slider_aux_RT = timer.getTime() - satisfaction_time
        #        aux_time = timer.getTime()
        #        slider_aux.markerPos = currentAxisVal * 40
        #        slider_aux_Flag = False
        #        Joystick_Flag = False
        #        Joystick_Return_Flag = False
        #        continueRoutine = False



        #elif Joystick_Flag:
        #    if slider_satisfaction_Flag:
        #        slider_satisfaction.markerPos = currentAxisVal * 40
        #    elif slider_aux_Flag:
        #        slider_aux.markerPos = currentAxisVal * 40

        ##elif slider_makesense_Flag:
        ##    slider_makesense.markerPos = 0



        ##VerticalAxisVal = joy.getAxis(1)
      End Routine:
        #evalScore = (evalScore*evalMultiplier)



        #thisExp.addData('Satisfaction Score',slider_satisfaction.markerPos)
        #thisExp.addData('MoreCurious Score',slider_aux.markerPos )

        #thisExp.addData('slider_Satisfaction_RT',slider_satisfaction_RT )
        #thisExp.addData('slider_MoreCurious_RT',slider_aux_RT )

        expImageDuration = expImageClock.getTime()
        thisExp.addData('Post RT', expImageDuration)
    CodeComponent code_progress_post
      Code Type = Auto->JS
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      Begin Routine:
        progress_display_post = str(exp_trials.thisN + 1) + "/" + str(exp_trials.nTotal)
    TextComponent text_progress_post
      color = 0.0039, 0.0039, 0.0039
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.025
      pos = (0, 0.28)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $progress_display_post
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    ImageComponent image_exp
      image [set every repeat] = $'posts/' + imageFile
      size = (1.1, 0.5097)
      startVal [time (s)] = 0.0
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    TextComponent move_right
      color = 0.0039, 0.0039, 0.0039
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.025
      pos = (0, -0.28)
      saveStartStop = False
      startVal [time (s)] = 0
      text = 右に動して次へ ⇒
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  Routine EXP_RATING
    RoutineSettingsComponent EXP_RATING
      saveStartStop = False
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    CodeComponent code_exp
      Code Type = Auto->JS
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      Begin Routine:

        startRoutine = timer.getTime()
        Joystick_Flag = False



        slider_satisfaction_Flag = True
        slider_postcuriosity_Flag = False
        slider_cogsocial_Flag = False


        slider_satisfaction.markerPos = 0
        slider_postcuriosity.markerPos = 0
        slider_cogsocial.markerPos = 0
      Each Frame:
        currentAxisVal = joy.getAxis(0)


        if Joystick_Return_Flag:
            if currentAxisVal >  0.1 or currentAxisVal < -0.1:
                Joystick_Flag = True
        else:
            if currentAxisVal <  0.1 and currentAxisVal > -0.1:
                Joystick_Return_Flag = True



        if Joystick_Flag and joy.getButton(0) == True:
            if slider_satisfaction_Flag:
                slider_satisfaction_RT = timer.getTime() - startRoutine
                satisfaction_time = timer.getTime()

                slider_satisfaction.markerPos = currentAxisVal * 2.65
                slider_satisfaction_Flag = False
                slider_postcuriosity_Flag = True
                slider_postcuriosity.markerPos = 0

                Joystick_Flag = False
                Joystick_Return_Flag = False


            elif slider_postcuriosity_Flag:
                slider_postcuriosity_RT = timer.getTime() - satisfaction_time
                postcuriosity_time = timer.getTime()

                slider_postcuriosity.markerPos = currentAxisVal * 2.65
                slider_postcuriosity_Flag = False
                slider_cogsocial_Flag = True
                slider_cogsocial.markerPos = 0

                Joystick_Flag = False
                Joystick_Return_Flag = False

            elif slider_cogsocial_Flag:
                slider_cogsocial_RT = timer.getTime() - postcuriosity_time
                cogsocial_time = timer.getTime()

                slider_cogsocial.markerPos = currentAxisVal * 2.65
                slider_cogsocial_Flag = False

                Joystick_Flag = False
                Joystick_Return_Flag = False

                continueRoutine = False



        elif Joystick_Flag:
            if slider_satisfaction_Flag:
                slider_satisfaction.markerPos = currentAxisVal * 2.65
            elif slider_postcuriosity_Flag:
                slider_postcuriosity.markerPos = currentAxisVal * 2.65
            elif slider_cogsocial_Flag:
                slider_cogsocial.markerPos = currentAxisVal * 2.65

        #elif slider_makesense_Flag:
        #    slider_makesense.markerPos = 0



        #VerticalAxisVal = joy.getAxis(1)
      End Routine:
        #evalScore = (evalScore*evalMultiplier)



        thisExp.addData('Satisfaction Score',slider_satisfaction.markerPos)
        thisExp.addData('Post-Curious Score',slider_postcuriosity.markerPos )
        thisExp.addData('CogSocial Score',slider_cogsocial.markerPos )

        thisExp.addData('slider_Satisfaction_RT',slider_satisfaction_RT )
        thisExp.addData('slider_postcuriosity_RT',slider_postcuriosity_RT )
        thisExp.addData('slider_cogsocial_RT',slider_cogsocial_RT )


        #TotalRatingDuration = timer.getTime()-Time_rating_start

        #if TotalRatingDuration >= Time_Rating * 60:
        #    exp_trials.finished = True  # Ends the loop
        #    continueRoutine = False       # Ends the current routine
        #    thisExp.addData('TotalRatingDuration', TotalRatingDuration)
    TextComponent text_q_satisfaction
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.032
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 提示された記事にどのくらい満足しましたか。
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    SliderComponent slider_satisfaction
      borderColor = #d3d3d3
      color = #d3d3d3
      fillColor = #ff6c00
      font = LINE Seed JP App_OTF Regular
      forceEndRoutine = False
      granularity = 0.005
      initVal = 0
      letterHeight = 0.02
      pos = (0, 0.29)
      saveStartStop = False
      size = (1.3, 0.02)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (-2.5, -1.5, -0.5, 0.5, 1.5, 2.5)
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    TextComponent text_q_postcuriosity
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.032
      pos = (0, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = このトピックについて、もっと知りたい気持ちはどれくらい強いですか。
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    SliderComponent slider_postcuriosity
      borderColor = #d3d3d3
      color = #d3d3d3
      fillColor = #ff6c00
      font = LINE Seed JP App_OTF Regular
      forceEndRoutine = False
      granularity = 0.005
      initVal = 0
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.3, 0.02)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (-2.5, -1.5, -0.5, 0.5, 1.5, 2.5)
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    TextComponent text_q_cogsocial
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.032
      pos = (0, -0.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = この記事にどれぐらいの人が「いいね！」しましたか。
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    SliderComponent slider_cogsocial
      borderColor = #d3d3d3
      color = #d3d3d3
      fillColor = #ff6c00
      font = LINE Seed JP App_OTF Regular
      forceEndRoutine = False
      granularity = 0.005
      initVal = 0
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.3, 0.02)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (-2.5, -1.5, -0.5, 0.5, 1.5, 2.5)
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    ImageComponent hotfix_tick2
      draggable = True
      image = hotfix_tick_post.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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  Routine SCREENING
    RoutineSettingsComponent SCREENING
      saveStartStop = False
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    CodeComponent code_screening
      Code Type = Auto->JS
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      Begin Routine:

        startRoutine = timer.getTime()
        Joystick_Flag = False

        slider_knowledge_Flag = True
        slider_precuriosity_Flag = False

        slider_precuriosity.markerPos = 0
        slider_knowledge.markerPos = 0
      Each Frame:
        currentAxisVal = joy.getAxis(0)


        if Joystick_Return_Flag:
            if currentAxisVal >  0.1 or currentAxisVal < -0.1:
                Joystick_Flag = True
        else:
            if currentAxisVal <  0.1 and currentAxisVal > -0.1:
                Joystick_Return_Flag = True



        if Joystick_Flag and joy.getButton(0) == True:
            if slider_knowledge_Flag:
                slider_knowledge_RT = timer.getTime() - startRoutine
                knowledge_time = timer.getTime()
                slider_knowledge.markerPos = currentAxisVal * 2.65
                slider_knowledge_Flag = False
                slider_precuriosity_Flag = True
                slider_precuriosity.markerPos = 0
                Joystick_Flag = False
                Joystick_Return_Flag = False
            elif slider_precuriosity_Flag:
                slider_precuriosity_RT = timer.getTime() - knowledge_time
                precuriosity_time = timer.getTime()
                slider_precuriosity.markerPos = currentAxisVal * 2.65
                slider_precuriosity_Flag = False
                Joystick_Flag = False
                Joystick_Return_Flag = False
                continueRoutine = False



        elif Joystick_Flag:
            if slider_precuriosity_Flag:
                slider_precuriosity.markerPos = currentAxisVal * 2.65
            elif slider_knowledge_Flag:
                slider_knowledge.markerPos = currentAxisVal * 2.65

        #elif slider_makesense_Flag:
        #    slider_makesense.markerPos = 0



        #VerticalAxisVal = joy.getAxis(1)
      End Routine:
        #evalScore = (evalScore*evalMultiplier)



        thisExp.addData('Knowledge Score',slider_knowledge.markerPos)

        thisExp.addData('slider_knowledge_RT',slider_knowledge_RT )

        thisExp.addData('Pre-Curiosity Score',slider_precuriosity.markerPos)

        thisExp.addData('slider_precuriosity_RT',slider_precuriosity_RT )
    CodeComponent code_progress_screening
      Code Type = Auto->JS
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      Begin Routine:
        progress_display_screening = str(screening_loop.thisN + 1) + "/" + str(screening_loop.nTotal)
    TextComponent text_progress_screening
      color = '#d3d3d3'
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $progress_display_screening
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    TextComponent header_list
      color = 1.0000, 1.0000, 1.0000
      draggable = True
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Header
      wrapWidth = 1.3
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    TextComponent text_q_knowledge
      color = '#d3d3d3'
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.032
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = あなたが答えを知っている可能性はどのくらいですか。
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    SliderComponent slider_knowledge
      borderColor = #d3d3d3
      color = '#d3d3d3'
      fillColor = '#ffa500'
      font = LINE Seed JP App_OTF Regular
      forceEndRoutine = False
      granularity = 0.005
      initVal = 0
      letterHeight = 0.02
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.3, 0.02)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (-2.5, -1.5, -0.5, 0.5, 1.5, 2.5)
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    TextComponent text_q_precuriosity
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.032
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = あなたは答えについて、どれくらい知りたいと思っていますか。
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    SliderComponent slider_precuriosity
      borderColor = LightGray
      fillColor = '#ffa500'
      font = LINE Seed JP App_OTF Regular
      forceEndRoutine = False
      granularity = 0.005
      initVal = 0
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.3, 0.02)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (-2.5, -1.5, -0.5, 0.5, 1.5, 2.5)
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    ImageComponent hotfix_tick1
      draggable = True
      image = hotfix_tick_pre.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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  Routine INTRO
    RoutineSettingsComponent INTRO
      saveStartStop = False
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    CodeComponent code_intro
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import visual
      Begin Experiment:
        from psychopy import event
        from psychopy.hardware import joystick
        from psychopy.core import getTime, wait
        import pandas as pd
        import pathlib
        import re
        import random
        import linecache
        import math

        #Import excel file
        #ForOpt = 0
        #data = pd.read_excel (r'C:\Users\Dubito\Desktop\Elaboration Exp\2nd stage\Sentence List.xlsx')
        #ForOpt = pd.DataFrame(data, columns= ['ForOpt'])

        PhotoFolder = './Image Pool/'

        nJoys = joystick.getNumJoysticks()
        id = 0
        joy = joystick.Joystick(id)
        timer = core.Clock()


        #Global variable definition
        Elaboration_Flag = True

        Elaborationstart = 0
        Elaboration = 0
        Sentencestart = 0
        Sentencereading = 0

        Trial_Num = 1
        Write_Flag = True
        evalMultiplier = 0
        Joystick_Return_Flag = True

        win.mouseVisible=False

        choice = 0

        slider_satisfaction_Flag = True
        slider_aux_Flag = False
        slider_curiosity_Flag = True
        slider_knowledge_Flag = False


        #Time_Rating = 1
        #Time_Rating is minute
        #Time_Allexp = 60
        #TotalRatingDuration = 0
      Each Frame:
        if joy.getButton(0) == True:
            continueRoutine = False
            Joystick_Return_Flag = False

        win.mouseVisible=False
      End Routine:
        Time_start = timer.getTime()
    TextComponent text_intro
      color = '#ffffff'
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.038
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        実験へようこそ。
        この実験は2つのセッションで構成されています。

        トリガーを引き、第１セッションを始めてください。
    TextComponent text_movetostart
      color = '#ffffff'
      disabled = True
      font = LINE Seed JP_OTF
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pull the trigger to start.Pull the trigger to start.Pull the trigger to start.Pull the trigger to start.
      wrapWidth = 1.5
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  Routine EXP_START
    RoutineSettingsComponent EXP_START
      saveStartStop = False
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    CodeComponent code_start
      Code Type = Auto->JS
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      End Routine:
        Time_rating_start = timer.getTime()
    TextComponent text_commence_exp
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.038
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        第１セッションが終りました。少し休憩をとってください。

        1分後、第２セッションに進めます。
    JoystickComponent commence_exp
      deviceNumber = 0
      forceEndRoutineOnPress = any click
      saveJoystickState = final
      saveStartStop = False
      startVal [time (s)] = 60
      timeRelativeTo = joystick onset
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    TextComponent text
      color = #d3d3d3
      font = LINE Seed JP_OTF
      letterHeight = 0.035
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 57
      stopVal [duration (s)] = 1.0
      text = トリガー解除まであと3秒…
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    TextComponent text_2
      color = #d3d3d3
      font = LINE Seed JP_OTF
      letterHeight = 0.035
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 58
      stopVal [duration (s)] = 1.0
      text = トリガー解除まであと2秒…
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    TextComponent text_3
      color = #d3d3d3
      font = LINE Seed JP_OTF
      letterHeight = 0.035
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1
      text = トリガー解除まであと1秒…
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    TextComponent text_6
      color = #d3d3d3
      font = LINE Seed JP_OTF
      letterHeight = 0.035
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 60
      text = 第２セッションを始める準備ができたら、トリガーを引いてください。
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    KeyboardComponent key_skip_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine FIXATION
    RoutineSettingsComponent FIXATION
      saveStartStop = False
      stopVal [duration (s)] = 2
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    CodeComponent code_fixation
      Code Type = Auto->JS
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      Begin Experiment:
        #loopClock = core.Clock()
      Begin Routine:
        #if exp_trials.thisN == 0:
        #    loopClock.reset()
      Each Frame:
        Time_current = timer.getTime()-Time_rating_start



        # Define the time limit in seconds
        #loopTimeLimit = 60  # Replace XX with the desired duration in seconds

        # Check if the time limit has been exceeded
        #if loopClock.getTime() >= loopTimeLimit:
    PolygonComponent polygon_2
      fillColor = '#ffffff'
      lineColor = '#ffffff'
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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  Routine END
    RoutineSettingsComponent END
      saveStartStop = False
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    TextComponent text_end_announce
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.038
      pos = (0, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 2
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      text:
        本日の実験はこれで以上です。お疲れさまでした！

        実験が終了したことを実験者にお知らせください。
  Routine BackITI
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    TextComponent text_movejoystick_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the joystick when you are ready for the next pair of sentences.
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    CodeComponent code_13
      Code Type = Py
      Each Frame:
        currentAxisVal = joy.getAxis(0)

        if Back_Flag == False:
           continueRoutine = False
           trials.finished = True

        if currentAxisVal <  0.1 and currentAxisVal > -0.1:
            Joystick_Return_Flag = True

        if Joystick_Return_Flag:
            if currentAxisVal >  0.2 or currentAxisVal < -0.2:
                continueRoutine = False
                Joystick_Return_Flag = False


        if key3.keys=="space":
            continueRoutine= False
            trials.finished=True
            Back_Flag = False


        Time_current = timer.getTime()-Time_start

        if Time_current > Time_Allexp*60:
            continueRoutine= False
            trials.finished = True
            Back_Flag = False
    TextComponent text_waitzone_3
      letterHeight = 0.03
      opacity = 0.5
      pos = (-0.53, 0.31)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        To enter the waiting zone,
        press the spacebar on the keyboard.
    KeyboardComponent key3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_movejoystick_ch_3
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 次の文への準備ができ次第、Joystickを動かしてください。
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    TextComponent text_waitzone_ch_3
      letterHeight = 0.05
      opacity = 0.5
      pos = (-0.35, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        スペースキーを押すと、実験ゾーンを中止し、
        待機ゾーンに入ることができます.
  Routine SCREENING_DONE
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    TextComponent text_movetostart_2
      color = '#ffffff'
      font = LINE Seed JP_OTF
      letterHeight = 0.05
      pos = (0, -0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pull the primary trigger of joystick to start the experiment.
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    JoystickComponent joystick_2
      deviceNumber = 0
      forceEndRoutineOnPress = any click
      saveJoystickState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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  Routine practice_screening
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    TextComponent header
      color = #d3d3d3
      draggable = True
      font = LINE Seed JP_OTF
      letterHeight = 0.06
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = TEST TITLE
      wrapWidth = 1.5
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    TextComponent text_q_knowledge_2
      color = '#d3d3d3'
      font = LINE Seed JP_OTF
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = How likely is it that you know the answer?
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    SliderComponent slider_knowledge_2
      borderColor = #d3d3d3
      color = '#d3d3d3'
      fillColor = '#ffa500'
      font = LINE Seed JP_OTF
      forceEndRoutine = False
      granularity = 0.05
      initVal = 3.5
      labels = (1, 2, 3, 4, 5, 6)
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      size = (1.0, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextComponent text_q_precuriosity_2
      font = LINE Seed JP_OTF
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = How curious are you about the answer?
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    SliderComponent slider_precuriosity_2
      borderColor = LightGray
      fillColor = '#ffa500'
      font = LINE Seed JP_OTF
      forceEndRoutine = False
      granularity = 0.05
      initVal = 3.5
      labels = (1, 2, 3, 4, 5, 6)
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.0, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:

        Joystick_Flag = False

        slider_knowledge_2_Flag = True
        slider_precuriosity_2_Flag = False

        slider_precuriosity_2.markerPos = 3.5
        slider_knowledge_2.markerPos = 3.5
      Each Frame:
        currentAxisVal = joy.getAxis(0)


        if Joystick_Return_Flag:
            if currentAxisVal >  0.1 or currentAxisVal < -0.1:
                Joystick_Flag = True
        else:
            if currentAxisVal <  0.1 and currentAxisVal > -0.1:
                Joystick_Return_Flag = True



        if Joystick_Flag and joy.getButton(0) == True:
            if slider_knowledge_2_Flag:
                slider_knowledge_2.markerPos = currentAxisVal * 7
                slider_knowledge_Flag = False
                slider_precuriosity_2_Flag = True
                slider_precuriosity_2.markerPos = 3.5
                Joystick_Flag = False
                Joystick_Return_Flag = False
            elif slider_precuriosity_2_Flag:
                slider_precuriosity_2.markerPos = currentAxisVal * 7
                slider_precuriosity_2_Flag = False
                Joystick_Flag = False
                Joystick_Return_Flag = False
                continueRoutine = False



        elif Joystick_Flag:
            if slider_precuriosity_2_Flag:
                slider_precuriosity_2.markerPos = currentAxisVal * 7
            elif slider_knowledge_2_Flag:
                slider_knowledge_2.markerPos = currentAxisVal * 7

        #elif slider_makesense_Flag:
        #    slider_makesense.markerPos = 0



        #VerticalAxisVal = joy.getAxis(1)
  Routine practice_exp
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    ImageComponent image_exp_2
      image [set every repeat] = resources/stimuli_1_Kidneys.png
      size = (1.1, 0.5097)
      startVal [time (s)] = 0.0
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    JoystickComponent joystick_3
      deviceNumber = 0
      forceEndRoutineOnPress = any click
      saveJoystickState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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  Routine practice_exp2
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  Routine screentest
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    ImageComponent image
      image = image_pool/stimuli_1_Kidneys.png
      size = (1.1, 0.5097)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      font = LINE Seed JP_OTF
      letterHeight = 0.02
      pos = (0.43, -0.28)
      startVal [time (s)] = 0.0
      text = Move right to continue ⇒
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  Routine initRoutine
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    CodeComponent code_init
      Code Type = Py
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      Begin Experiment:
        # Place this at the top of the "Begin Experiment" tab
        try:
            participant_id = int(expInfo['participant'])
        except ValueError:
            participant_id = 0  # Default seed if participant ID is not a number

        random.seed(participant_id)

        import pandas as pd
        import random

        # Load the conditions file
        conditions_df = pd.read_excel('post_list_original.xlsx')

        # Get the unique post numbers
        all_posts = conditions_df['post_num'].unique().tolist()

        # Define the number of posts to display
        num_posts_to_show = 50  # Adjust as needed

        # Ensure that num_posts_to_show is less than or equal to the total number of posts
        if num_posts_to_show > len(all_posts):
            raise ValueError("Number of posts to show cannot exceed the total number of available posts.")

        # Randomly select posts
        selected_posts = random.sample(all_posts, num_posts_to_show)

        # Shuffle the selected posts
        random.shuffle(selected_posts)

        # Calculate half of the posts for balance
        half = num_posts_to_show // 2

        # Assign conditions
        HiSC_posts = selected_posts[:half]  # First half assigned to HiSC
        LoSC_posts = selected_posts[half:]  # Second half assigned to LoSC

        # Create a list to store the indices of the selected trials
        selectedRows = []

        # Iterate over the DataFrame to find matching rows
        for idx, row in conditions_df.iterrows():
            if row['post_num'] in HiSC_posts and row['condition'] == 'HiSC':
                selectedRows.append(idx)
            elif row['post_num'] in LoSC_posts and row['condition'] == 'LoSC':
                selectedRows.append(idx)

        # Shuffle the selectedRows to randomize trial order
        random.shuffle(selectedRows)
  Routine main
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  Routine BREAK
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    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Routine:
        # Only display the break after the 15th trial
        if exp_trials.thisN != 24:
            continueRoutine = False
    TextComponent text_break
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.038
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        第２セッションの途中点に達しました。（50回のうち25回完了）

        続ける前に5分間休憩をとってください。（トイレOK）
    TextComponent text_1min
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 240
      stopVal [duration (s)] = 30
      text = 再開まであと1分…
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    TextComponent text_30sec
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 270
      stopVal [duration (s)] = 20
      text = 再開まであと30秒…
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    TextComponent text_10sec
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 290
      stopVal [duration (s)] = 7
      text = 再開まであと10秒…
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    TextComponent text_3sec
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 297
      stopVal [duration (s)] = 1
      text = 再開まであと3秒…
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    TextComponent text_2sec
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 298
      stopVal [duration (s)] = 1
      text = 再開まであと2秒…
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    TextComponent text_1sec
      color = #d3d3d3
      font = LINE Seed JP App_OTF Regular
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 299
      stopVal [duration (s)] = 1
      text = 再開まであと1秒…
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    TextComponent text_go
      color = #d3d3d3
      font = LINE Seed JP_OTF
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 300
      text = トリガーを引いて再開してください。
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    JoystickComponent commence_exp_2
      deviceNumber = 0
      forceEndRoutineOnPress = any click
      saveJoystickState = final
      saveStartStop = False
      startVal [time (s)] = 300
      timeRelativeTo = joystick onset
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    KeyboardComponent key_skip
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine main
  Routine INTRO
  LoopInitiator screening_loop loopType="TrialHandler"
    conditionsFile = header_list_original.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Num1': 1, 'Header': 'なんで腎臓って2つあるの？'},
      {'Num1': 2, 'Header': 'なんで動物のママって赤ちゃん置いてっちゃうことがあるの？'},
      {'Num1': 3, 'Header': '虫ってどうやって夏になると戻ってくるん？'},
      {'Num1': 4, 'Header': 'なんで生理の血って固まらないの？'},
      {'Num1': 5, 'Header': '1週間っていう概念はどこから来たの？'},
      {'Num1': 6, 'Header': '毎日どのビタミンやミネラルをどれくらい摂ればいいかはどうやって分かったの？'},
      {'Num1': 7, 'Header': 'なんでスペースシャトルって引退したの？'},
      {'Num1': 8, 'Header': '妊娠した体ってどうやって出産のタイミングを知るの？'},
      {'Num1': 9, 'Header': 'お店って他の店のギフトカード売ってどうやって儲けてるん？'},
      {'Num1': 10, 'Header': 'マネーロンダリングって何？'},
      {'Num1': 11, 'Header': 'なんでマルチ商法ってそんなにダメなの？'},
      {'Num1': 12, 'Header': 'アメリカがベトナム戦争に飛び込んだ理由って何だったの？'},
      {'Num1': 13, 'Header': 'なんで不動産会社は現金取引を好むのに、車屋は嫌がるの？'},
      {'Num1': 14, 'Header': 'なんで壁がいっぱいあっても携帯の電波が届くの？'},
      {'Num1': 15, 'Header': 'なんで原子力発電所って建設も運営もこんなに高いの？'},
      {'Num1': 16, 'Header': '精神的な病気って歳をとると悪化するの？'},
      {'Num1': 17, 'Header': 'なんで汚い言葉って存在するの？'},
      {'Num1': 18, 'Header': 'なんで多くのヨーロッパの国では市民権が出生地じゃなくて親で決まるの？'},
      {'Num1': 19, 'Header': 'なんで車の値段は家電みたいに技術の進化で下がらないの？'},
      {'Num1': 20, 'Header': 'なんで核実験場は安全なのに、キュリー夫人のノートはまだ危険なの？'},
      {'Num1': 21, 'Header': 'なんで猫って段ボールみたいな寝心地悪そうなところが好きなの？'},
      {'Num1': 22, 'Header': 'なんで宇宙は暗いのに太陽の光が見えるの？'},
      {'Num1': 23, 'Header': 'なんで鳥って電線に止まっても感電しないの？'},
      {'Num1': 24, 'Header': 'なんで空は青いの？'},
      {'Num1': 25, 'Header': 'なんでヘリウム風船って浮くの？'},
      {'Num1': 26, 'Header': 'なんで1日が24時間に分かれてるの？'},
      {'Num1': 27, 'Header': 'なんで玉ねぎ切ると目が涙出るの？'},
      {'Num1': 28, 'Header': 'なんで歳を取ると髪が白くなるの？'},
      {'Num1': 29, 'Header': 'なんで鳥肌って立つの？'},
      {'Num1': 30, 'Header': 'なんで紙で切ると普通の切り傷より痛いの？'},
      {'Num1': 31, 'Header': 'なんであくびをするし、移っちゃうの？'}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
    Routine SCREENING
  LoopTerminator screening_loop
  Routine EXP_START
  Routine initRoutine
  LoopInitiator exp_trials loopType="TrialHandler"
    Selected rows = $selectedRows
    conditionsFile = post_list_original.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'post_num': 1, 'condition': 'HiSC', 'imageFile': 'HiSC_1.png'},
      {'post_num': 1, 'condition': 'LoSC', 'imageFile': 'LoSC_1.png'},
      {'post_num': 2, 'condition': 'HiSC', 'imageFile': 'HiSC_2.png'},
      {'post_num': 2, 'condition': 'LoSC', 'imageFile': 'LoSC_2.png'},
      {'post_num': 3, 'condition': 'HiSC', 'imageFile': 'HiSC_3.png'},
      {'post_num': 3, 'condition': 'LoSC', 'imageFile': 'LoSC_3.png'},
      {'post_num': 4, 'condition': 'HiSC', 'imageFile': 'HiSC_4.png'},
      {'post_num': 4, 'condition': 'LoSC', 'imageFile': 'LoSC_4.png'},
      {'post_num': 5, 'condition': 'HiSC', 'imageFile': 'HiSC_5.png'},
      {'post_num': 5, 'condition': 'LoSC', 'imageFile': 'LoSC_5.png'},
      {'post_num': 6, 'condition': 'HiSC', 'imageFile': 'HiSC_6.png'},
      {'post_num': 6, 'condition': 'LoSC', 'imageFile': 'LoSC_6.png'},
      {'post_num': 7, 'condition': 'HiSC', 'imageFile': 'HiSC_7.png'},
      {'post_num': 7, 'condition': 'LoSC', 'imageFile': 'LoSC_7.png'},
      {'post_num': 8, 'condition': 'HiSC', 'imageFile': 'HiSC_8.png'},
      {'post_num': 8, 'condition': 'LoSC', 'imageFile': 'LoSC_8.png'},
      {'post_num': 9, 'condition': 'HiSC', 'imageFile': 'HiSC_9.png'},
      {'post_num': 9, 'condition': 'LoSC', 'imageFile': 'LoSC_9.png'},
      {'post_num': 10, 'condition': 'HiSC', 'imageFile': 'HiSC_10.png'},
      {'post_num': 10, 'condition': 'LoSC', 'imageFile': 'LoSC_10.png'},
      {'post_num': 11, 'condition': 'HiSC', 'imageFile': 'HiSC_11.png'},
      {'post_num': 11, 'condition': 'LoSC', 'imageFile': 'LoSC_11.png'},
      {'post_num': 12, 'condition': 'HiSC', 'imageFile': 'HiSC_12.png'}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
    Routine FIXATION
    Routine EXP_IMAGE
    Routine EXP_RATING
    Routine BREAK
  LoopTerminator exp_trials
  Routine END
